# Generated by Configurator on Thu Nov 08 17:42:36 EST 2018

# Reset
Property,Core,Initialize,0

# Devices
Device,/dev/ttyUSB1,SerialManager,/dev/ttyUSB1
Device,/dev/ttyUSB0,SerialManager,/dev/ttyUSB0
Device,Scope,LeicaDMI,Scope
Device,IL-Turret,LeicaDMI,IL-Turret
Device,ObjectiveTurret,LeicaDMI,ObjectiveTurret
Device,TL-FieldDiaphragm,LeicaDMI,TL-FieldDiaphragm
Device,IL-FieldDiaphragm,LeicaDMI,IL-FieldDiaphragm
Device,IL-ApertureDiaphragm,LeicaDMI,IL-ApertureDiaphragm
Device,FocusDrive,LeicaDMI,FocusDrive
Device,MagnificationChanger,LeicaDMI,MagnificationChanger
Device,SidePort,LeicaDMI,SidePort
Device,IL-Shutter,LeicaDMI,IL-Shutter
Device,TL-Shutter,LeicaDMI,TL-Shutter
Device,XYStage,LeicaDMI,XYStage
Device,Transmitted Light,LeicaDMI,Transmitted Light
Device,XYStage-1,ASIStage,XYStage


# Pre-init settings for devices
Property,Scope,AnswerTimeOut,250.0000
Property,Scope,Port,/dev/ttyUSB0
Property,XYStage-1,Port,/dev/ttyUSB1

# Pre-init settings for COM ports
Property,/dev/ttyUSB1,AnswerTimeout,500.0000
Property,/dev/ttyUSB1,BaudRate,9600
Property,/dev/ttyUSB1,DataBits,8
Property,/dev/ttyUSB1,DelayBetweenCharsMs,0.0000
Property,/dev/ttyUSB1,Handshaking,Off
Property,/dev/ttyUSB1,Parity,None
Property,/dev/ttyUSB1,StopBits,1
Property,/dev/ttyUSB1,Verbose,1
Property,/dev/ttyUSB0,AnswerTimeout,500.0000
Property,/dev/ttyUSB0,BaudRate,19200
Property,/dev/ttyUSB0,DataBits,8
Property,/dev/ttyUSB0,DelayBetweenCharsMs,0.0000
Property,/dev/ttyUSB0,Handshaking,Off
Property,/dev/ttyUSB0,Parity,None
Property,/dev/ttyUSB0,StopBits,1
Property,/dev/ttyUSB0,Verbose,1

# Hub (parent) references
Parent,IL-Turret,Scope
Parent,ObjectiveTurret,Scope
Parent,TL-FieldDiaphragm,Scope
Parent,IL-FieldDiaphragm,Scope
Parent,IL-ApertureDiaphragm,Scope
Parent,FocusDrive,Scope
Parent,MagnificationChanger,Scope
Parent,SidePort,Scope
Parent,IL-Shutter,Scope
Parent,TL-Shutter,Scope
Parent,XYStage,Scope
Parent,Transmitted Light,Scope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
#FocusDirection,FocusDrive,0

# Roles
#Property,Core,Focus,FocusDrive
#Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# IL-Turret
Label,IL-Turret,5,6-A
Label,IL-Turret,4,5-Y55
Label,IL-Turret,3,4-CY5
Label,IL-Turret,2,3-TX2
Label,IL-Turret,1,2-GFP
Label,IL-Turret,0,1-H3
# ObjectiveTurret
Label,ObjectiveTurret,5,6-0x 0na
Label,ObjectiveTurret,4,5-1x 0.04na
Label,ObjectiveTurret,3,4-40x 0.6na
Label,ObjectiveTurret,2,3-10x 0.3na
Label,ObjectiveTurret,1,2-20x 0.4na
Label,ObjectiveTurret,0,1-5x 0.15na
# SidePort
Label,SidePort,3,4
Label,SidePort,2,3
Label,SidePort,1,2
Label,SidePort,0,1

# Configuration presets
# Group: Channel
# Group configurations
ConfigGroup,Channel,Empty,Filter,State,0


# Group: System
# Preset: Startup


# PixelSize settings


