# Generated by Configurator on Fri May 17 10:20:04 EDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM4,SerialManager,COM4
Device,Scope,LeicaDMI,Scope
Device,FocusDrive,LeicaDMI,FocusDrive
Device,XYStage,ASIStage,XYStage

# Pre-init settings for devices
Property,Scope,AnswerTimeOut,250.0000
Property,Scope,Port,COM5
Property,XYStage,Port,COM4

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references
Parent,FocusDrive,Scope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,FocusDrive,0

# Roles
Property,Core,Focus,FocusDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

