# Generated by Configurator on Mon Aug 19 11:22:04 EDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM6,SerialManager,COM6
Device,COM4,SerialManager,COM4
Device,XYStage,ASIStage,XYStage
Device,Thorlabs DC4100,ThorlabsDCxxxx,Thorlabs DC4100
Device,Scope,LeicaDMI,Scope
Device,IL-Turret,LeicaDMI,IL-Turret
Device,IL-FieldDiaphragm,LeicaDMI,IL-FieldDiaphragm
Device,IL-ApertureDiaphragm,LeicaDMI,IL-ApertureDiaphragm
Device,FocusDrive,LeicaDMI,FocusDrive
Device,IL-Shutter,LeicaDMI,IL-Shutter
Device,TL-Shutter,LeicaDMI,TL-Shutter

# Pre-init settings for devices
Property,XYStage,Port,COM4
Property,Thorlabs DC4100,Port,COM6
Property,Scope,AnswerTimeOut,250.0000
Property,Scope,Port,COM5

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,115200
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references
Parent,IL-Turret,Scope
Parent,IL-FieldDiaphragm,Scope
Parent,IL-ApertureDiaphragm,Scope
Parent,FocusDrive,Scope
Parent,IL-Shutter,Scope
Parent,TL-Shutter,Scope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,FocusDrive,0

# Roles
Property,Core,Shutter,IL-Shutter
Property,Core,Focus,FocusDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# IL-Turret
Label,IL-Turret,5,DAP
Label,IL-Turret,4,Y55
Label,IL-Turret,3,CY5
Label,IL-Turret,2,TX2
Label,IL-Turret,1,GFP
Label,IL-Turret,0,BFF

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

