# Generated by Configurator on Thu May 23 14:18:41 CDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,TigerCommHub,ASITiger,TigerCommHub
Device,XYStage:XY:31,ASITiger,XYStage:XY:31
Device,FocusDrive,ASITiger,ZStage:Z:32
Device,Turret:O:33,ASITiger,Turret:O:33
Device,FilterSlider:S:33,ASITiger,FilterSlider:S:33
Device,LED:L:37:1,ASITiger,LED:L:37:1
Device,LED:L:37:2,ASITiger,LED:L:37:2
Device,LED:L:37:3,ASITiger,LED:L:37:3
Device,LED:L:37:4,ASITiger,LED:L:37:4
Device,CRISPAFocus:Z:32,ASITiger,CRISPAFocus:Z:32
Device,Camera,PVCAM,Camera-1

# Pre-init settings for devices
Property,TigerCommHub,Port,COM3

# Pre-init settings for COM ports
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,115200
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1

# Hub (parent) references
Parent,XYStage:XY:31,TigerCommHub
Parent,FocusDrive,TigerCommHub
Parent,Turret:O:33,TigerCommHub
Parent,FilterSlider:S:33,TigerCommHub
Parent,LED:L:37:1,TigerCommHub
Parent,LED:L:37:2,TigerCommHub
Parent,LED:L:37:3,TigerCommHub
Parent,LED:L:37:4,TigerCommHub
Parent,CRISPAFocus:Z:32,TigerCommHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,FocusDrive,0

# Roles
Property,Core,Camera,Camera
Property,Core,Focus,FocusDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Turret:O:33
Label,Turret:O:33,5,Position-6
Label,Turret:O:33,4,Position-5
Label,Turret:O:33,3,20X
Label,Turret:O:33,2,4X
Label,Turret:O:33,1,10X
Label,Turret:O:33,0,Position-1
# FilterSlider:S:33
Label,FilterSlider:S:33,3,Position-4
Label,FilterSlider:S:33,2,Position-3
Label,FilterSlider:S:33,1,Multi
Label,FilterSlider:S:33,0,BF

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

